PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = CheckerBoard
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    GratingComponent grating
      tex = sqrXsqr
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      sf = None
      size = [0.5, 0.5]
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Flow
  Routine trial
