PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    GratingComponent grating1
      tex = sqrXsqr
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      sf = None
      size = [0.5, 0.5]
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    GratingComponent grating2
      tex = sqrXsqr
      color = $[-1,-1,-1]
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.5
      sf = None
      size = [0.5, 0.5]
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  Routine ITI
    TextComponent text
      color = red
      text = +
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator BlockLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator Flashing loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine trial
    LoopTerminator Flashing
    Routine ITI
  LoopTerminator BlockLoop
