PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = label_fr_flo
  Units = use prefs
  Screen = 1
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Routines
  Routine temps_reaction1
    TextComponent text_9
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Before starting the experiment, let’s practice. During practice no odor will be delivered.

        When the red text appears, please exhale. Once the text turns blue, please inhale and press the left arrow button as fast as possible.

        Press any button to start.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine temps_reaction2
    TextComponent text_10
      text = +
      stopVal [duration (s)] = 8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = red
      text = exhale
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 8
      letterHeight = 0.1
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    TextComponent text_12
      color = blue
      text = inhale
      stopVal [duration (s)] = 2
      startVal [time (s)] = 9
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'left'
      startVal [time (s)] = 9
      store = nothing
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    TextComponent text_13
      color = blue
      text = +
      startVal [time (s)] = 11
      letterHeight = 0.1
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  Routine pleasantness_rating
    RatingScaleComponent agreabilite
      labels = very unpleasant, very pleasant
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = Pleasantness
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  Routine edibility_rating
    RatingScaleComponent comestibilite
      labels = peu comestible, tres comestible
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = comestibilite
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  Routine instructions_2
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Awesome!
        Let’s start the experiment.
        Please look at the screen. At some point you will receive a very brief description of the next odor. When the text turns red, please exhale. Once the text turns blue, inhale and the odor will be delivered.

        If you smell an odor please press the left arrow button as fast as possible. If you do not smell any odor, do not press any button.

        Next, please use the arrow buttons to indicate how pleasant the odor was and confirm by pressing "Enter".
        If you did not receive any odor, please just press "Enter".
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine intensity_rating
    RatingScaleComponent intensite
      labels = tres faible, tres intense
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = intensite
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  Routine isi
    StaticComponent ISI_2
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is over, thank you very much.

        Please press any button to terminate.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    CodeComponent code
      Begin Routine:
        onset = 7.1+ random()
    TextComponent Label
      text [set every repeat] = $label
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_2
      color = red
      text [set every repeat] = $label
      stopVal [duration (s)] = 1
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_3
      color = blue
      text [set every repeat] = $label
      stopVal [duration (s)] = 5
      startVal [time (s)] = 7
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = $onset
      store = first key
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = /dev/parport0
      startVal [time (s)] = $onset
      startData = $channel
  Routine kreuz
    TextComponent text_7
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Great!
        Now let’s practice the pleasantness rating.

        Please use the arrow buttons to indicate how pleasant the odor was and confirm by pressing "Enter".
        If you did not receive any odor, please just press "Enter".

        Press a button to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine temps_reaction1
  Routine temps_reaction2
  Routine instructions
  Routine pleasantness_rating
  Routine instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = olfacto1ang.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{u'corrAns': u'left', u'channel': 4, u'label': u'Eucalyptus oil'},
      {u'corrAns': u'left', u'channel': 16, u'label': u'Almond extract'},
      {u'corrAns': u'left', u'channel': 128, u'label': u'Fresh flowers'},
      {u'corrAns': u'left', u'channel': 64, u'label': u'Parmesan cheese'},
      {u'corrAns': u'left', u'channel': 4, u'label': u"Vick's vapor-rub"},
      {u'corrAns': u'left', u'channel': 16, u'label': u'Glue stick'},
      {u'corrAns': u'left', u'channel': 128, u'label': u'Cheap perfume'},
      {u'corrAns': u'left', u'channel': 64, u'label': u'Dried vomit'},
      {u'corrAns': None, u'channel': 1, u'label': u'Eucalyptus oil'},
      {u'corrAns': None, u'channel': 1, u'label': u'Almond extract'},
      {u'corrAns': None, u'channel': 1, u'label': u'Fresh flowers'},
      {u'corrAns': None, u'channel': 1, u'label': u'Parmesan cheese'},
      {u'corrAns': None, u'channel': 1, u'label': u"Vick's vapor-rub"},
      {u'corrAns': None, u'channel': 1, u'label': u'Glue stick'},
      {u'corrAns': None, u'channel': 1, u'label': u'Cheap perfume'},
      {u'corrAns': None, u'channel': 1, u'label': u'Dried vomit'}]
    Routine isi
    Routine stimulus
    Routine pleasantness_rating
    Routine kreuz
  LoopTerminator trials
  Routine thanks
