PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = TEST_label_ang
  Units = use prefs
  Screen = 1
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Routines
  Routine pleasantness_rating
    RatingScaleComponent pleasantness
      labels = very unpleasant, very pleasant
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = Pleasantness
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  Routine edibility_rating
    RatingScaleComponent edibility
      labels = very indedible, very edible
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = edibility
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  Routine intensity_rating
    RatingScaleComponent intensity
      labels = very weak, very intense
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 0
      scaleDescription = intensity
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  Routine isi
    StaticComponent ISI_2
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You made it!

        Thank you very much.

        Click to finish
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    CodeComponent code
      Begin Routine:
        onset = 7.1+ random()
    TextComponent Label
      text [set every repeat] = $label
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      text = +
      stopVal [duration (s)] = 4
      startVal [time (s)] = 2
      letterHeight = 0.1
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    TextComponent text_2
      color = red
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_3
      color = green
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 7
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      startVal [time (s)] = $onset 
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    TextComponent text_4
      text = +
      startVal [time (s)] = 9
      letterHeight = 0.1
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = /dev/parport1
      startVal [time (s)] = $onset
      startData = 4
  Routine kreuz
    TextComponent text_7
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        As quickly as possible, please press the «Enter» key if you smell an odor and press «0» if you do not smell anything.
        After each odor, please rate pleasantness, intensity and edibility using the arrow keys.

        Press any key when ready!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = olfacto1ang.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'corrAns': 1, u'channel': 4, u'label': u"Huile d'eucalyptus"},
      {u'corrAns': 1, u'channel': 16, u'label': u"Extrait d'amande"},
      {u'corrAns': 1, u'channel': 128, u'label': u'Fleurs fraiches'},
      {u'corrAns': 1, u'channel': 64, u'label': u'Fromage parmesan '},
      {u'corrAns': 1, u'channel': 4, u'label': u"Vick's vapor-rub"},
      {u'corrAns': 1, u'channel': 16, u'label': u'b\xe2ton de colle'},
      {u'corrAns': 1, u'channel': 128, u'label': u'parfum \xe0 bas prix'},
      {u'corrAns': 1, u'channel': 64, u'label': u'vomit s\xe9ch\xe9'},
      {u'corrAns': 2, u'channel': 1, u'label': u"Huile d'eucalyptus"},
      {u'corrAns': 2, u'channel': 1, u'label': u"Extrait d'amande"},
      {u'corrAns': 2, u'channel': 1, u'label': u'Fleurs fraiches'},
      {u'corrAns': 2, u'channel': 1, u'label': u'Fromage parmesan '},
      {u'corrAns': 2, u'channel': 1, u'label': u"Vick's vapor-rub"},
      {u'corrAns': 2, u'channel': 1, u'label': u'b\xe2ton de colle'},
      {u'corrAns': 2, u'channel': 1, u'label': u'parfum \xe0 bas prix'},
      {u'corrAns': 2, u'channel': 1, u'label': u'vomit s\xe9ch\xe9'}]
    Routine isi
    Routine stimulus
    Routine pleasantness_rating
    Routine intensity_rating
    Routine edibility_rating
    Routine kreuz
  LoopTerminator trials
  Routine thanks
