PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = TestPorts
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ParallelOutComponent p_port1
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 2
      address = /dev/parport0
      startVal [time (s)] = 2
      startData = 1
    ParallelOutComponent p_port4
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 2
      address = /dev/parport0
      startVal [time (s)] = 6
      startData = 4
    ParallelOutComponent p_port16
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 2
      address = /dev/parport0
      startVal [time (s)] = 12
      startData = 16
    ParallelOutComponent p_port64
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 2
      address = /dev/parport0
      startVal [time (s)] = 16
      startData = 64
    ParallelOutComponent p_port128
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 2
      address = /dev/parport0
      startVal [time (s)] = 20
      startData = 128
Flow
  Routine trial
