PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = id_loc_ang
  Units = use prefs
  Screen = 1
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Routines
  Routine pleasantness_rating
    RatingScaleComponent pleasantness
      labels = left-almond, right-eucalyptus
      pos = 0, -0.4
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = True
      low = 1
      scaleDescription = Pleasantness
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  Routine edibility_rating
    RatingScaleComponent edibility
      labels = very indedible, very edible
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 5
      size = 1.0
      forceEndRoutine = True
      low = 0
      scaleDescription = edibility
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  Routine intensity_rating
    RatingScaleComponent intensity
      labels = very weak, very intense
      pos = 0, -0.4
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 0
      size = 1.0
      forceEndRoutine = True
      low = 0
      scaleDescription = intensity
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  Routine isi
    StaticComponent ISI_2
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You made it!

        Thank you very much.

        Click to finish
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stimulus
    CodeComponent code
      Begin Routine:
        onset = 7.1+ random()
    TextComponent Label
      text [set every repeat] = $question
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      text = +
      stopVal [duration (s)] = 4
      startVal [time (s)] = 2
      letterHeight = 0.1
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    TextComponent text_2
      color = red
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_3
      color = green
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 7
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = $onset 
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    TextComponent text_4
      text = +
      startVal [time (s)] = 9
      letterHeight = 0.1
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.5
      address = 0x0378
      startVal [time (s)] = $onset
      startData = channel
  Routine kreuz
    TextComponent text_7
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Please identify or localize the odors.
        You will be given an instruction before each stimulus.
        When the question is "where?", press left arrow for the left nostril and right arrow for the right nostril.
        When the question is "what?", press left arrow for almond and right arrow for eucalyptus.
        If you do not perceive any odor, press left or right arrow.
        Please answer as quickly as possible.

        Press any key when ready!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = olfacto2flo.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'code': u'benz_left', u'question': u'where?', u'corrAns': u'left', u'channel': 18},
      {u'code': u'benz_right', u'question': u'where?', u'corrAns': u'right', u'channel': 33},
      {u'code': u'euc_left', u'question': u'where?', u'corrAns': u'left', u'channel': 6},
      {u'code': u'euc_right', u'question': u'where?', u'corrAns': u'right', u'channel': 9},
      {u'code': u'benz_left', u'question': u'what?', u'corrAns': u'left', u'channel': 18},
      {u'code': u'benz_right', u'question': u'what?', u'corrAns': u'left', u'channel': 33},
      {u'code': u'euc_left', u'question': u'what?', u'corrAns': u'right', u'channel': 6},
      {u'code': u'euc_right', u'question': u'what?', u'corrAns': u'right', u'channel': 9}]
    Routine isi
    Routine stimulus
    Routine kreuz
  LoopTerminator trials
  Routine thanks
