PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = staircaseEXP
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = $level
      address = 0x0378
      startVal [time (s)] = 1.2
      startData = channel
    TextComponent text_2
      color = red
      text = +
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent text_3
      color = green
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 1
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    TextComponent text_6
      text = +
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine ISI_2
    StaticComponent ISI_3
      stopVal [duration (s)] = 40
      startVal [time (s)] = 0.0
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 40
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent text_4
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        It is over
        thanks
  Routine instr
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you perceive the odor in the left nostril, press the left arrow,
        If you perceive the odor in the right nostril, press the right arrow.

        Press any key to start the experiment
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials_2 loopType="MultiStairHandler"
    stairType = simple
    switchMethod = fullRandom
    conditionsFile = staircaseflo_2.xlsx
    loopType = interleaved staircases
    nReps = 5
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    conditions:
      [{u'maxVal': 4.1, u'nDown': 2, u'minVal': 0.1, u'nUp': 1, u'label': u'left', u'stepSizes': [0.5, 0.25, 0.1], u'corrAns': u'left', u'startVal': 0.1, u'channel': 6, u'stepType': u'lin'},
      {u'maxVal': 4.1, u'nDown': 2, u'minVal': 0.1, u'nUp': 1, u'label': u'right', u'stepSizes': [0.5, 0.25, 0.1], u'corrAns': u'right', u'startVal': 0.1, u'channel': 9, u'stepType': u'lin'}]
    Routine ISI_2
    Routine trial
  LoopTerminator trials_2
  Routine thanks
