PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [600, 400]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test1
  Units = use prefs
  Screen = 1
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Routines
  Routine Test1
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Stimulus
      text [set every repeat] = $StimSet
      stopVal [duration (s)] = 2
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent UpperLine
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2
      pos = [0, 0.45]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [0.95, 0.95]
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    TextComponent Ret
      color [set every repeat] = $CHcolor
      text = +
      stopVal [duration (s)] = $RetDur
      startVal [time (s)] = 2
      letterHeight = 0.1
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    TextComponent Probe
      text [set every repeat] = $ProbeLet
      stopVal [duration (s)] = $ProbeDur
      startVal [time (s)] = $ProbeStart
      letterHeight = 0.1
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    KeyboardComponent Resp
      correctAns = $ProbeCor
      storeCorrect = True
      stopVal [duration (s)] = $ProbeDur
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = $ProbeStart
      store = all keys
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../LetterSternberg/PartialTrial1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'RetDur': 4, u'ProbeCor': 1, u'ProbeDur': 2, u'StimDur': 2, u'ProbeStart': 6, u'CHcolor': u'red', u'StimSet': u'A B C', u'ProbeLet': u'a'},
      {u'RetDur': 0, u'ProbeCor': 1, u'ProbeDur': 2, u'StimDur': 2, u'ProbeStart': 2, u'CHcolor': u'blue', u'StimSet': u'D E F', u'ProbeLet': u'b'},
      {u'RetDur': 4, u'ProbeCor': 2, u'ProbeDur': 2, u'StimDur': 2, u'ProbeStart': 6, u'CHcolor': u'green', u'StimSet': u'G H J', u'ProbeLet': u'c'}]
    Routine trial
  LoopTerminator trials
