PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [600,400]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    TextComponent text_2
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent text_3
      text = ///////
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine trial
  LoopTerminator trials
