PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800,600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = LetSternberg
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent LetterStimulus
      text [set every repeat] = $StimLetters
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent BlankRetention
      stopVal [duration (s)] = 5
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent ProbeLetter
      text [set every repeat] = $ProbeLetter
      stopVal [duration (s)] = 3
      startVal [time (s)] = 8
      letterHeight = 0.1
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    TextComponent BlankITI
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = LetterSternbergConditions.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{u'ProbeLetter': u'a', u'StimLetters': u'A B C', u'ITI': 2},
      {u'ProbeLetter': u'f', u'StimLetters': u'D', u'ITI': 7},
      {u'ProbeLetter': u'm', u'StimLetters': u'D F G H B N M', u'ITI': 1}]
    Routine trial
  LoopTerminator trials
