PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = SetupDisplay
  blendMode = add
  Units = use preferences
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine
      fillColor = [1,1,-1]
      stopVal [duration (s)] = $TrialITIDur
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] = $StimSet
      stopVal [duration (s)] = $StimDur
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] = $UpBrack
      stopVal [duration (s)] = $StimDur
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine
      fillColor = yellow
      stopVal [duration (s)] = $TrialITIDur
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine
      fillColor = cyan
      stopVal [duration (s)] = $TrialITIDur
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] = $ProbeLet
      stopVal [duration (s)] = $ProbeDur
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = $ProbeStart
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets
      color = cyan
      text = +
      stopVal [duration (s)] = $ProbeDur
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = $ProbeStart
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine
      fillColor = cyan
      stopVal [duration (s)] = $TrialITIDur
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair
      color = green
      text = +
      stopVal [duration (s)] = $TrialDur
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair
      color = red
      text = +
      stopVal [duration (s)] = $ITI
      units = norm
      startVal [time (s)] = $TrialDur
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp
      correctAns = $Correct
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = $ProbeStart
      store = all keys
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PartialTrial1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'RetDur': 3L, u'StimDur': 3L, u'UpBrack': None, u'ProbeDur': 2L, u'ProbeStart': 6L, u'TrialDur': 8L, u'ITI': 6L, u'StimSet': u'A B C D E F', u'RetStart': 3L, u'ProbeLet': u'abcdef', u'TrialITIDur': 14L, u'Correct': 1L},
      {u'RetDur': 2.5, u'StimDur': 3L, u'UpBrack': u'{ }', u'ProbeDur': 0.5, u'ProbeStart': 5.5, u'TrialDur': 6L, u'ITI': 5L, u'StimSet': u'{A}B C D E F', u'RetStart': 3L, u'ProbeLet': u'', u'TrialITIDur': 11L, u'Correct': u'NA'},
      {u'RetDur': 0L, u'StimDur': 3L, u'UpBrack': u'{ }', u'ProbeDur': 2L, u'ProbeStart': 3L, u'TrialDur': 5L, u'ITI': 1L, u'StimSet': u'A{B}C D E F', u'RetStart': 3L, u'ProbeLet': u'a{b}cdef', u'TrialITIDur': 6L, u'Correct': 2L}]
    Routine trial
  LoopTerminator trials
