PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,0.875,0.914]
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test2
  blendMode = add
  Units = use preferences
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent Line
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = [0, 0.9]
      units = norm
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [-2, 0.9]
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    TextComponent text
      text = ABCDEF
      stopVal [duration (s)] = 1.0
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_2
      text = test
      stopVal [duration (s)] = 1
      units = norm
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent resp
      correctAns = y
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text_3
      text = Hello
      stopVal [duration (s)] = 2
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ScanWait
    TextComponent text_4
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Waiting
        Press 5 to advance
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if $resp.corr
            msg="Correct!"
        else
            msg = "Incorrect"
    TextComponent FeedbackMsg
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine REST
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine ScanWait
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine Feedback
    Routine REST
  LoopTerminator trials
