PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = testDisplay
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text1
      text = A [B  C  D  E] F 
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text
      color = yellow
      text =   [          ]   
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine trial
