PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [600, 400]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u'999'}
  Show info dlg = False
  expName = PartialTrialDIR
  Units = use prefs
  Screen = 1
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Routines
  Routine Test1
  Routine trial
    PolygonComponent UpperTopLine
      fillColor = yellow
      stopVal [duration (s)] = $TrialDur
      pos = [0, 0.45]
      lineColor = yellow
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [0.95, 0.95]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Stimulus
      text [set every repeat] = $StimSet
      stopVal [duration (s)] = 2
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent UpperBracket
      color = yellow
      text [set every repeat] = $UpBrack
      stopVal [duration (s)] = 2
      pos = [0,0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    PolygonComponent LowerTopLine
      fillColor = yellow
      stopVal [duration (s)] = $TrialDur
      pos = [0.0, 0.9]
      lineColor = yellow
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [0.95, 0.95]
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    TextComponent Probe
      text [set every repeat] = $ProbeLet
      stopVal [duration (s)] = $ProbeDur
      pos = [0, -0.50]
      startVal [time (s)] = $ProbeStart
      letterHeight = 0.1
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    KeyboardComponent Resp
      correctAns = $ProbeCor
      storeCorrect = True
      stopVal [duration (s)] = $RespDur
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = $ProbeStart
      store = all keys
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    TextComponent TrialCrossHair
      color = green
      text = +
      stopVal [duration (s)] = $TrialDur
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ITICrossHair
      color = red
      text = +
      stopVal [duration (s)] = $ITIDur
      startVal [time (s)] = $TrialDur
      letterHeight = 0.1
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    PolygonComponent UpperBotLine
      fillColor = cyan
      stopVal [duration (s)] = $TrialDur
      pos = [0, -0.450]
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [0.95, 0.95]
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    PolygonComponent LowerBotLine
      fillColor = cyan
      stopVal [duration (s)] = $TrialDur
      pos = [0, -0.9]
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [0.95, 0.95]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PartialTrial1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'RetDur': 4, u'ProbeCor': 1, u'ProbeDur': 2, u'RespDur': 6, u'UpBrack': u'{ }', u'StimDur': 2, u'ProbeStart': 6, u'TrialDur': 8, u'ITIDur': 4, u'StimSet': u'A B C D E F', u'ProbeLet': u'a'},
      {u'RetDur': 0, u'ProbeCor': 1, u'ProbeDur': 2, u'RespDur': 6, u'UpBrack': u'{ }', u'StimDur': 2, u'ProbeStart': 2, u'TrialDur': 4, u'ITIDur': 4, u'StimSet': u'A B C D E F', u'ProbeLet': u'b'},
      {u'RetDur': 4, u'ProbeCor': 2, u'ProbeDur': 0, u'RespDur': 4, u'UpBrack': u'{ }', u'StimDur': 2, u'ProbeStart': 6, u'TrialDur': 6, u'ITIDur': 4, u'StimSet': u'A B C D E F', u'ProbeLet': u'c'}]
    Routine trial
  LoopTerminator trials
