PsychoPy2experiment version="1.81.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  Save wide csv file = False
  expName = Test2
  blendMode = average
  Units = norm
  Save log file = False
  Screen = 1
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Routines
  Routine trial_2
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 11
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  L K R G M X 
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] =   {         }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine
      fillColor = yellow
      stopVal [duration (s)] = 11
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine
      fillColor = cyan
      stopVal [duration (s)] = 11
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  b t y g q j 
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets
      color = cyan
      text =       { }    
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine
      fillColor = cyan
      stopVal [duration (s)] = 11
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair
      color = green
      text = +
      stopVal [duration (s)] = 9
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair
      color = red
      text = +
      stopVal [duration (s)] = 2
      units = norm
      startVal [time (s)] = 9
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = 6
      storeCorrect = True
      stopVal [duration (s)] = 4
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
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  Routine TrialFeedBack
    CodeComponent code
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if ((resp.corr) & (resp.rt < 2.0)):#stored on last run routine
          msg="Correct and on time! RT=%.3f" %(resp.rt)
        elif ((resp.corr) & (resp.rt > 2.0)):#stored on last run routine
          msg="Correct, but too slow!\n RT=%.3f\nResponse time should be less than two seconds." %(resp.rt)
        else:
          if resp.rt < 2.0:
            msg="Oops! That was incorrect, but on time!"
          else:
            msg="Oops! That was incorrect and too slow!"
      End Routine:
        msg='Ended'
    TextComponent text
      wrapWidth = 1.5
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine trial_2
  Routine TrialFeedBack
