PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  Save wide csv file = False
  expName = TestExamples
  blendMode = add
  Units = norm
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_2
      stopVal [duration (s)] = 13
      lineColor = $[1,1,-1]
      pos = [0, 0.65]
      units = norm
      fillColor = [1,1,-1]
      startVal [time (s)] = 0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_2
      color = $[0,0,0]
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =  L K R G M X 
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_2
      color = yellow
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =   {         }
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_2
      stopVal [duration (s)] = 13
      lineColor = $[1,1,-1]
      pos = [0, 0.15]
      units = norm
      fillColor = yellow
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_2
      stopVal [duration (s)] = 13
      lineColor = cyan
      pos = [0, -0.15]
      units = norm
      fillColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_2
      color = $[0,0,0]
      wrapWidth = 2
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text [set every repeat] = btygqj
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_2
      color = cyan
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text =       { }    
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_2
      stopVal [duration (s)] = 13
      lineColor = cyan
      pos = [0, -0.65]
      units = norm
      fillColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_2
      color = green
      stopVal [duration (s)] = 9
      units = norm
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_2
      color = red
      stopVal [duration (s)] = 4
      units = norm
      text = +
      startVal [time (s)] = 9
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_2
      correctAns = $Correct
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
      store = all keys
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Flow
  Routine trial
