<PsychoPy2experiment version="1.82.01" encoding="utf-8">
  <Settings>
    <Param name="Show mouse" val="False" valType="bool" updates="None"/>
    <Param name="Data filename" val="'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None"/>
    <Param name="Monitor" val="testMonitor" valType="str" updates="None"/>
    <Param name="Enable Escape" val="True" valType="bool" updates="None"/>
    <Param name="color" val="$[0,0,0]" valType="str" updates="None"/>
    <Param name="Window size (pixels)" val="[1366,768]" valType="code" updates="None"/>
    <Param name="Full-screen window" val="False" valType="bool" updates="None"/>
    <Param name="colorSpace" val="rgb" valType="str" updates="None"/>
    <Param name="Experiment info" val="{u'session': u'001', u'participant': u''}" valType="code" updates="None"/>
    <Param name="Save csv file" val="False" valType="bool" updates="None"/>
    <Param name="Show info dlg" val="False" valType="bool" updates="None"/>
    <Param name="Save wide csv file" val="False" valType="bool" updates="None"/>
    <Param name="Save psydat file" val="True" valType="bool" updates="None"/>
    <Param name="expName" val="test5" valType="str" updates="None"/>
    <Param name="logging level" val="exp" valType="code" updates="None"/>
    <Param name="blendMode" val="add" valType="str" updates="None"/>
    <Param name="Save excel file" val="False" valType="bool" updates="None"/>
    <Param name="Units" val="norm" valType="str" updates="None"/>
    <Param name="Save log file" val="False" valType="bool" updates="None"/>
    <Param name="Screen" val="1" valType="num" updates="None"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <TextComponent name="text">
        <Param name="opacity" val="1" valType="code" updates="constant"/>
        <Param name="colorSpace" val="rgb" valType="str" updates="constant"/>
        <Param name="name" val="text" valType="code" updates="None"/>
        <Param name="wrapWidth" val="1.7" valType="code" updates="constant"/>
        <Param name="color" val="white" valType="str" updates="constant"/>
        <Param name="text" val=" A B C D E F " valType="str" updates="constant"/>
        <Param name="stopVal" val="4" valType="code" updates="constant"/>
        <Param name="durationEstim" val="" valType="code" updates="None"/>
        <Param name="pos" val="[0, 0.4]" valType="code" updates="constant"/>
        <Param name="flip" val="" valType="str" updates="constant"/>
        <Param name="startEstim" val="" valType="code" updates="None"/>
        <Param name="units" val="norm" valType="str" updates="None"/>
        <Param name="startType" val="time (s)" valType="str" updates="None"/>
        <Param name="ori" val="0" valType="code" updates="constant"/>
        <Param name="stopType" val="duration (s)" valType="str" updates="None"/>
        <Param name="startVal" val="0.0" valType="code" updates="None"/>
        <Param name="font" val="arial" valType="str" updates="constant"/>
        <Param name="letterHeight" val="0.2" valType="code" updates="set every frame"/>
      </TextComponent>
      <StaticComponent name="ISI">
        <Param name="code" val="" valType="code" updates="None"/>
        <Param name="name" val="ISI" valType="code" updates="None"/>
        <Param name="stopVal" val="0.5" valType="code" updates="constant"/>
        <Param name="durationEstim" val="" valType="code" updates="None"/>
        <Param name="startEstim" val="" valType="code" updates="None"/>
        <Param name="startType" val="time (s)" valType="str" updates="None"/>
        <Param name="stopType" val="duration (s)" valType="str" updates="None"/>
        <Param name="startVal" val="0.0" valType="code" updates="None"/>
      </StaticComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="trial"/>
  </Flow>
</PsychoPy2experiment>
