PsychoPy2experiment version="1.81.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = UbuntuMon
  color = $[-1,-1,-1]
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  Save wide csv file = False
  expName = Instructions
  blendMode = add
  Units = norm
  Save log file = False
  Screen = 1
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Routines
  Routine ButtonPractice_MIDDLE
    TextComponent text_29
      text = Press the RIGHT MIDDLE Finger button.
      stopVal [duration (s)] = 10
      pos = [0, 0.4]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    StaticComponent ISI_15
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_15
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 20
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_15
      wrapWidth = 1.5
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_15
      wrapWidth = 1.5
      color = yellow
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_15
      fillColor = yellow
      stopVal [duration (s)] = 20
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_15
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_15
      wrapWidth = 2
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_15
      color = cyan
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_15
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_15
      color = green
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_15
      color = red
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      correctAns = 7
      storeCorrect = True
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      startVal [time (s)] = 0.0
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  Routine Feedback
    CodeComponent code_2
      Begin Experiment:
        msg='?????'
      Begin Routine:
        if key_resp_2.corr:#stored on last run routine
            msg="Correct! That button indicates a YES response."
            trials.finished = True
        else:
            msg="Oops! Wrong button, please try again."
            trials.finished = False
    TextComponent text_25
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine var_6Letters_0
    TextComponent text_2
      wrapWidth = 1.1
      text = For this experiment you will see letters at the top of the screen.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text
      text = Some of the letters will be enclosed by brackets.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_6
      text = These are the letters to remember.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_4
      text = The letters will be removed, focus on the green cross hair.
      stopVal [duration (s)] = 5
      pos = [0, 0.8]
      startVal [time (s)] = 9
      letterHeight = 0.1
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    StaticComponent ISI_11
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_11
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 30
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_11
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 9
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_11
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] =   {   }      
      stopVal [duration (s)] = 6
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 3
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_11
      fillColor = yellow
      stopVal [duration (s)] = 30
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_11
      fillColor = cyan
      stopVal [duration (s)] = 30
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_11
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 9
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 14
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_11
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 6
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 17
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_11
      fillColor = cyan
      stopVal [duration (s)] = 30
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_11
      color = green
      text = +
      stopVal [duration (s)] = 26
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_11
      color = red
      text = +
      stopVal [duration (s)] = 3
      units = norm
      startVal [time (s)] = 26
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_11
      correctAns = $Correct
      stopVal [duration (s)] = 0
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent text_5
      wrapWidth = 1.1
      text = You will then see letters at the bottom.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 14
      letterHeight = 0.1
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    TextComponent text_7
      text = Only one letter will be in brackets.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 17
      letterHeight = 0.1
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    TextComponent text_8
      wrapWidth = 1.25
      text = You need to decide whether this letter was one that you had to remember.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 20
      letterHeight = 0.1
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    TextComponent text_9
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 23
      letterHeight = 0.1
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      text:
        YES = INDEX finger button
        NO  = MIDDLE finger button
    TextComponent text_10
      text = The trial is then over and the cross hair turns RED.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 26
      letterHeight = 0.1
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  Routine trial3
    StaticComponent ISI_5
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_5
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 14
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_5
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_5
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] = {           }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_5
      fillColor = yellow
      stopVal [duration (s)] = 14
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_5
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_5
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_5
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_5
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_5
      color = green
      text = +
      stopVal [duration (s)] = 10
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_5
      color = red
      text = +
      stopVal [duration (s)] = 4
      units = norm
      startVal [time (s)] = 10
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_5
      correctAns = $Correct
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
      store = all keys
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  Routine var_6Letters_2
    TextComponent text_13
      text = This is the screen you will see for each trial
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_16
      wrapWidth = 1.25
      text = With an UPPER Part
      stopVal [duration (s)] = 3
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_18
      text = And a LOWER part
      stopVal [duration (s)] = 3
      pos = [0, -0.4]
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_21
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0
      letterHeight = 0.1
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    StaticComponent ISI_13
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_13
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 20
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_13
      wrapWidth = 1.5
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_13
      wrapWidth = 1.5
      color = yellow
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_13
      fillColor = yellow
      stopVal [duration (s)] = 20
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_13
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_13
      wrapWidth = 2
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_13
      color = cyan
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_13
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_13
      color = green
      text = +
      stopVal [duration (s)] = 3
      units = norm
      startVal [time (s)] = 12
      letterHeight = 0.2
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    TextComponent RestCrossHair_13
      color = red
      text = +
      stopVal [duration (s)] = 3
      units = norm
      startVal [time (s)] = 15
      letterHeight = 0.2
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    TextComponent text_22
      text = You will also see a cross hair on the screen
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 9
      letterHeight = 0.1
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    TextComponent text_23
      text = Either Green
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent text_24
      text = Or RED
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 15
      letterHeight = 0.1
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  Routine trial6
    TextComponent TopInstruct
      text = including line breaks
      stopVal [duration (s)] = 2
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    StaticComponent ISI_3
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_3
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 14
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_3
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_3
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] = {           }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_3
      fillColor = yellow
      stopVal [duration (s)] = 14
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_3
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_3
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_3
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_3
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_3
      color = green
      text = +
      stopVal [duration (s)] = 10
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_3
      color = red
      text = +
      stopVal [duration (s)] = 4
      units = norm
      startVal [time (s)] = 10
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_3
      correctAns = $Correct
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
      store = all keys
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  Routine trial4
    StaticComponent ISI_4
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_4
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 14
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_4
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_4
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] = {           }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_4
      fillColor = yellow
      stopVal [duration (s)] = 14
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_4
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_4
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_4
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_4
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_4
      color = green
      text = +
      stopVal [duration (s)] = 10
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_4
      color = red
      text = +
      stopVal [duration (s)] = 4
      units = norm
      startVal [time (s)] = 10
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_4
      correctAns = $Correct
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
      store = all keys
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  Routine trial5
    StaticComponent ISI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_2
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 14
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_2
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_2
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] = {           }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_2
      fillColor = yellow
      stopVal [duration (s)] = 14
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_2
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_2
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_2
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_2
      fillColor = cyan
      stopVal [duration (s)] = 14
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_2
      color = green
      text = +
      stopVal [duration (s)] = 10
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_2
      color = red
      text = +
      stopVal [duration (s)] = 4
      units = norm
      startVal [time (s)] = 10
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_2
      correctAns = $Correct
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
      store = all keys
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  Routine Feedback_MIDDLE
    CodeComponent code
      Begin Experiment:
        msg='?????'
      Begin Routine:
        if key_resp_3.corr:#stored on last run routine
            msg="Good! That button indicates a NO response."
            trials_2.finished = True
        else:
            msg="Oops! Wrong button, please try again."
            trials_2.finished = False
    TextComponent text_26
      text [set every repeat] = $msg
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ButtonPractice
    TextComponent text_28
      stopVal [duration (s)] = 10
      pos = [0, 0.4]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        First ...
        Let's make sure the buttons work.
        Press the RIGHT INDEX Finger button.
    StaticComponent ISI_14
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_14
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 20
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_14
      wrapWidth = 1.5
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_14
      wrapWidth = 1.5
      color = yellow
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_14
      fillColor = yellow
      stopVal [duration (s)] = 20
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_14
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_14
      wrapWidth = 2
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_14
      color = cyan
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_14
      fillColor = cyan
      stopVal [duration (s)] = 20
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_14
      color = green
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_14
      color = red
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      correctAns = 6
      storeCorrect = True
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      startVal [time (s)] = 0.0
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  Routine NumLettersToRem
    TextComponent text_15
      text = The number of letters to remember
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_33
      wrapWidth = 1.25
      text = Varies between 1 and 6
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_34
      text = There will always be six letters presented
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_3
      text = It is the brackets that indicate which letters to remember.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 9
      letterHeight = 0.1
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    TextComponent text_35
      text = Here are some examples
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent UpBrack1
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] =         { }  
      stopVal [duration (s)] = 3
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 15
      font = Courier
      letterHeight = 0.2
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    StaticComponent ISI_17
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_17
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 30
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_17
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 30
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_17
      wrapWidth = 1.5
      color = yellow
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_17
      fillColor = yellow
      stopVal [duration (s)] = 30
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_17
      fillColor = cyan
      stopVal [duration (s)] = 30
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    PolygonComponent BotLowerLine_17
      fillColor = cyan
      stopVal [duration (s)] = 30
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_17
      color = green
      text = +
      stopVal [duration (s)] = 30
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_17
      color = red
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent UpBrack2
      wrapWidth = 1.5
      color = yellow
      text = {   }        
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 18
      font = Courier
      letterHeight = 0.2
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    TextComponent UpBrack3
      wrapWidth = 1.5
      color = Yellow
      text =       {     }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 20
      font = Courier
      letterHeight = 0.2
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    TextComponent UpBrack4
      wrapWidth = 1.5
      color = yellow
      text =   {       }  
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 22
      font = Courier
      letterHeight = 0.2
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    TextComponent UpBrack5
      wrapWidth = 1.5
      color = yellow
      text = {         }  
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 24
      font = Courier
      letterHeight = 0.2
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    TextComponent UpBrack6
      wrapWidth = 1.5
      color = yellow
      text = {           }
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 26
      font = Courier
      letterHeight = 0.2
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    TextComponent text_38
      text = One letter
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 15
      letterHeight = 0.1
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    TextComponent text_39
      text = Two letters
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      startVal [time (s)] = 18
      letterHeight = 0.1
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    TextComponent text_40
      text = Three letters
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      startVal [time (s)] = 20
      letterHeight = 0.1
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    TextComponent text_41
      text = Four letters
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      startVal [time (s)] = 22
      letterHeight = 0.1
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    TextComponent text_42
      text = Five letters
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      startVal [time (s)] = 24
      letterHeight = 0.1
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    TextComponent text_43
      text = Six letters
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      startVal [time (s)] = 26
      letterHeight = 0.1
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  Routine TrialParts_1
    TextComponent text_27
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        To help with the analysis of the brain data.
        Some trials are PARTIAL.
    TextComponent text_30
      wrapWidth = 1.25
      text = All trials will have a set of letters to study.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_31
      text = Some will not require a response
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_32
      wrapWidth = 1.5
      text = Some will have no delay between the letters to study and the response.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 9
      letterHeight = 0.1
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    StaticComponent ISI_16
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_16
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 25
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_16
      wrapWidth = 1.5
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_16
      wrapWidth = 1.5
      color = yellow
      stopVal [duration (s)] = 0
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_16
      fillColor = yellow
      stopVal [duration (s)] = 25
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_16
      fillColor = cyan
      stopVal [duration (s)] = 25
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_16
      wrapWidth = 2
      color = $[0,0,0]
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_16
      color = cyan
      stopVal [duration (s)] = 0
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_16
      fillColor = cyan
      stopVal [duration (s)] = 25
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_16
      color = green
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_16
      color = red
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent text_36
      wrapWidth = 1.5
      text = What is important is that when the crosshair turns RED. The trial is over.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent text_37
      wrapWidth = 1.5
      text = Try to forget any of the studied letters and wait for the next trial
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 15
      letterHeight = 0.1
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    TextComponent text_50
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 20
      letterHeight = 0.1
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      text:
        Here is an example trial with feedback.
        Remember respond as quickly as possible.
  Routine trial5_2
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 11
      pos = [0, 0.65]
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText
      color = $[0,0,0]
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =  L K R G M X 
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets
      color = yellow
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =   {         }
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine
      fillColor = yellow
      stopVal [duration (s)] = 11
      pos = [0, 0.15]
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine
      fillColor = cyan
      stopVal [duration (s)] = 11
      pos = [0, -0.15]
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText
      color = $[0,0,0]
      wrapWidth = 2
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text [set every repeat] =  b t y g q j 
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets
      color = cyan
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text =       { }    
      startVal [time (s)] = 7
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine
      fillColor = cyan
      stopVal [duration (s)] = 11
      pos = [0, -0.65]
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair
      color = green
      stopVal [duration (s)] = 9
      units = norm
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair
      color = red
      stopVal [duration (s)] = 2
      units = norm
      text = +
      startVal [time (s)] = 9
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = 6
      storeCorrect = True
      stopVal [duration (s)] = 4
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 7
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  Routine var_6Letters_1
    TextComponent text_11
      text = Let's Repeat
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_12
      wrapWidth = 1.25
      text = Remember the letters B and C
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_14
      text = Letters are removed
      stopVal [duration (s)] = 5
      pos = [0, 0.8]
      startVal [time (s)] = 6
      letterHeight = 0.1
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    StaticComponent ISI_12
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_12
      fillColor = [1,1,-1]
      stopVal [duration (s)] = 22
      pos = [0, 0.65]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_12
      wrapWidth = 1.5
      color = $[0,0,0]
      text [set every repeat] =  A B C D E F 
      stopVal [duration (s)] = 6
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_12
      wrapWidth = 1.5
      color = yellow
      text [set every repeat] =   {   }      
      stopVal [duration (s)] = 3
      pos = [0, 0.4]
      units = norm
      startVal [time (s)] = 3
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_12
      fillColor = yellow
      stopVal [duration (s)] = 22
      pos = [0, 0.15]
      lineWidth = 2
      units = norm
      lineColor = $[1,1,-1]
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_12
      fillColor = cyan
      stopVal [duration (s)] = 22
      pos = [0, -0.15]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_12
      wrapWidth = 2
      color = $[0,0,0]
      text [set every repeat] =  a b c d e f 
      stopVal [duration (s)] = 6
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 11
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_12
      color = cyan
      text =   { }        
      stopVal [duration (s)] = 6
      pos = [0, -0.4]
      units = norm
      startVal [time (s)] = 11
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_12
      fillColor = cyan
      stopVal [duration (s)] = 22
      pos = [0, -0.65]
      lineWidth = 2
      units = norm
      lineColor = cyan
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_12
      color = green
      text = +
      stopVal [duration (s)] = 20
      units = norm
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_12
      color = red
      text = +
      stopVal [duration (s)] = 3
      units = norm
      startVal [time (s)] = 17
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_12
      correctAns = $Correct
      stopVal [duration (s)] = 0
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent text_17
      text = Are you trying to remember the letter b?
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 11
      letterHeight = 0.1
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    TextComponent text_19
      text = Yes you are. You would press the INDEX finger button as quickly as possible.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 14
      letterHeight = 0.1
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    TextComponent text_20
      text = The trial is over and the cross hair turns RED.
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      startVal [time (s)] = 17
      letterHeight = 0.1
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  Routine TrialFeedBack
    CodeComponent code_3
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if ((resp.corr) & (resp.rt < 2.0)):#stored on last run routine
          msg="Correct and on time! RT=%.3f" %(resp.rt)
        elif ((resp.corr) & (resp.rt > 2.0)):#stored on last run routine
          msg="Correct, but too slow!\n RT=%.3f\nResponse time should be less than two seconds." %(resp.rt)
        else:
          if resp.rt < 2.0:
            msg="Oops! That was incorrect, but on time!"
          else:
            msg="Oops! That was incorrect and too slow!"
      End Routine:
        msg='Ended'
    TextComponent text_47
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      units = norm
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine DemoTrialRealTimes
    TextComponent text_44
      stopVal [duration (s)] = 3
      pos = [0, 0.8]
      text = Let's repeat at the true pace
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_45
      wrapWidth = 1.25
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      units = norm
      text = Remember the letters B and C
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_46
      stopVal [duration (s)] = 5
      pos = [0, 0.8]
      text = Letters are removed
      startVal [time (s)] = 5
      letterHeight = 0.1
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    StaticComponent ISI_18
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    PolygonComponent TopUpperLine_18
      stopVal [duration (s)] = 17
      lineColor = $[1,1,-1]
      pos = [0, 0.65]
      units = norm
      fillColor = [1,1,-1]
      startVal [time (s)] = 0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    TextComponent UpperText_18
      color = $[0,0,0]
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =  A B C D E F 
      startVal [time (s)] = 3
      font = Courier
      letterHeight = 0.2
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    TextComponent UpperBrackets_18
      color = yellow
      wrapWidth = 1.5
      stopVal [duration (s)] = 2
      pos = [0, 0.4]
      units = norm
      text [set every repeat] =   {   }      
      startVal [time (s)] = 3
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotUpperLine_18
      stopVal [duration (s)] = 17
      lineColor = $[1,1,-1]
      pos = [0, 0.15]
      units = norm
      fillColor = yellow
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.95]
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    PolygonComponent TopLowerLine_18
      stopVal [duration (s)] = 17
      lineColor = cyan
      pos = [0, -0.15]
      units = norm
      fillColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent LowerText_17
      color = $[0,0,0]
      wrapWidth = 2
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text [set every repeat] =  a b c d e f 
      startVal [time (s)] = 10
      font = Courier
      letterHeight = 0.2
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    TextComponent LowerBrackets_17
      color = cyan
      stopVal [duration (s)] = 2
      pos = [0, -0.4]
      units = norm
      text =   { }        
      startVal [time (s)] = 10
      font = Courier
      letterHeight = 0.2
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    PolygonComponent BotLowerLine_18
      stopVal [duration (s)] = 17
      lineColor = cyan
      pos = [0, -0.65]
      units = norm
      fillColor = cyan
      startVal [time (s)] = 0.0
      lineWidth = 2
      nVertices = 2
      size = [2, 0.5]
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    TextComponent TrialCrossHair_18
      color = green
      stopVal [duration (s)] = 12
      units = norm
      text = +
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent RestCrossHair_18
      color = red
      stopVal [duration (s)] = 4
      units = norm
      text = +
      startVal [time (s)] = 12
      letterHeight = 0.2
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    KeyboardComponent KeyboardResp_13
      correctAns = $Correct
      stopVal [duration (s)] = 0
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent text_48
      stopVal [duration (s)] = 2
      pos = [0, 0.8]
      text = Respond as quickly as possible
      startVal [time (s)] = 10
      letterHeight = 0.1
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    TextComponent text_49
      stopVal [duration (s)] = 4
      pos = [0, 0.8]
      text = The trial is over and the cross hair turns RED.
      startVal [time (s)] = 12
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine ButtonPractice
    Routine Feedback
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine ButtonPractice_MIDDLE
    Routine Feedback_MIDDLE
  LoopTerminator trials_2
  Routine var_6Letters_2
  Routine var_6Letters_0
  Routine var_6Letters_1
  Routine DemoTrialRealTimes
  Routine NumLettersToRem
  Routine TrialParts_1
  Routine trial5_2
  Routine TrialFeedBack
