PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,0.875,0.914]
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  Save wide csv file = False
  expName = test2
  blendMode = add
  Units = use preferences
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent Line
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = [0, 0.9]
      units = norm
      startVal [time (s)] = 0.0
      nVertices = 2
      size = [-2, 0.9]
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    TextComponent text
      text = ABCDEF
      stopVal [duration (s)] = 1.0
      pos = [0, 0.8]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_2
      text = test
      stopVal [duration (s)] = 5
      units = norm
      startVal [time (s)] = 1
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
