PsychoPy2experiment version="1.81.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800,600]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = test4
  blendMode = average
  Units = use preferences
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 1.0
      address = /dev/parport0
      startVal [time (s)] = 0.0
      startData = 1
Flow
  Routine trial
